PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = -1.0000, -1.0000, -1.0000
  expName = image_emotion
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcome
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import socket
        from datetime import datetime
        #开始时的时间戳
        timebegin = int(datetime.now().timestamp()*1000)
        # 定义主机和端口
        host = 'localhost'
        port = 7777
        # 创建一个套接字对象
        #server_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        # 绑定套接字到指定的主机和端口
        #server_socket.connect((host, port))
        #编号规则
        MEclass=11
        OTHERSclass=12
        ANXIETYclass=13
        CALMNESSclass=14
        correctTask1=15
        wrongTask1=16

        SUICIDEclass=21
        POSITIVEclass=22
        NEGATIVEclass=23
        NEUTRALclass=24
        correctTask2=25
        wrongTask2=26

        stopwatchappears=31
        tooearly=32
        correctTask3=33
        overrun=34

        startOfTheParadigm="start_paradigm"
        endOfTheParadigm="end_paradigm"
        startClosingEyes="start_closeeye"
        endClosingEyes="end_closeeye"
        startOpeningEyes="start_openeye"
        endOpeningEyes="end_openeye"
        startTask="start_task"
        endTask="end_task"

        oneTaskStart="start_onetask"
        oneTaskEnd="end_onetask"
        oneBlankStart="start_oneblank"
        oneBlankEnd="end_oneblank"
    TextComponent welcome_introduction
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
                                          欢迎参加视觉情绪感知实验
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = 您好！感谢参与本次脑电记录实验。
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = 本实验旨在研究不同视觉图像对大脑活动的影响。 整个过程大约持续 35 分钟
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        实验过程中，请您尽量保持身体放松
    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        避免头部晃动或不必要的面部表情（如皱眉、咬牙）
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 这些动作会干扰脑电信号的采集
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    TextComponent text_6
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        准备好后，请按 [空格键] 继续
    KeyboardComponent welcome_end_button
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introduction
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    ImageComponent image
      image = images/hdu1.jpg
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        静息态基线采集
        在正式看图之前，我们需要记录一段您
        在放松状态下的脑波。
        请按照屏幕指示完成以下两个步骤：
        闭眼静坐 (60秒)：
        听到提示音后请闭上眼睛，保持清醒和放松，
        直到听到结束提示。
        睁眼静坐 (60秒)：
        请注视屏幕中央的“+”号，自然眨眼，保持放松。
    TextComponent text_8
      color = 0.0039, -1.0000, 0.0039
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 准备好开始静息态采集了吗？ 请按 [空格键] 开始。
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    KeyboardComponent introduction_button
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        #datastamp=int(datetime.now().timestamp()*1000)-timebegin
        #server_socket.send((str(startOfTheParadigm)+ '\n').encode('utf-8'))

        marker = f"MARKER {startOfTheParadigm}"
        timestamp = local_clock()
        outlet.push_sample([marker], timestamp)
  Routine jingxitai
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    TextComponent text_9
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 请闭上您的眼睛
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  Routine jingxitai2
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        #datastamp=int(datetime.now().timestamp()*1000)-timebegin
        #server_socket.send(((str(startClosingEyes)) + '\n').encode('utf-8'))

        marker = f"MARKER {startClosingEyes}"
        timestamp = local_clock()
        outlet.push_sample([marker], timestamp)
      End Routine:
        #datastamp=int(datetime.now().timestamp()*1000)-timebegin
        #server_socket.send((str(endClosingEyes) + '\n').encode('utf-8'))

        marker = f"MARKER {endClosingEyes}"
        timestamp = local_clock()
        outlet.push_sample([marker], timestamp)
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 40
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  Routine zhengyanjingxitai
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = 请睁开您的眼睛
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = images/openYourEyes.mp3
      speakerIndex = 8.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine zhengyanjingxitai2
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        #datastamp=int(datetime.now().timestamp()*1000)-timebegin
        #server_socket.send((str(startOpeningEyes) + '\n').encode('utf-8'))

        marker = f"MARKER {startOpeningEyes}"
        timestamp = local_clock()
        outlet.push_sample([marker], timestamp)
      End Routine:
        #datastamp=int(datetime.now().timestamp()*1000)-timebegin
        #server_socket.send((str(endOpeningEyes)  + '\n').encode('utf-8'))

        marker = f"MARKER {endOpeningEyes}"
        timestamp = local_clock()
        outlet.push_sample([marker], timestamp)
    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine task_introduction
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    ImageComponent image_2
      image = images/hdu2.jpg
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    TextComponent text_12
      letterHeight = 0.05
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
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      text:
        正式实验说明
    TextComponent text_13
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = 屏幕上将呈现一系列图片。实验将以 "组" 为单位进行
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    TextComponent text_14
      letterHeight = 0.05
      pos = (0, 0.17)
      startVal [time (s)] = 0.0
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      text:
        注视与观看
        每组你会连续看到 10张图片
        图片出现前，屏幕中央会有十字“+”
    TextComponent text_15
      letterHeight = 0.05
      pos = (0, 0.04)
      startVal [time (s)] = 0.0
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      text:
        【关键规则】
        在看到“+”和“图片”期间
        请尽量保持睁眼，不要眨眼，不要移动视线
    TextComponent text_16
      letterHeight = 0.05
      pos = (0, -0.12)
      startVal [time (s)] = 0.0
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      text:
        评分环节
        10张图结束后，会出现评分界面
    TextComponent text_17
      letterHeight = 0.05
      pos = (0, -0.22)
      startVal [time (s)] = 0.0
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      text:
        此时您可以自由眨眼和调整坐姿
        请根据刚才那组图带给您的整体感受进行评分
    TextComponent text_18
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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      text:
        休息
        评分结束后会有短暂的休息时间
        请利用这段时间充分放松眼睛
    TextComponent text_19
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = 明白了请按 [空格键] 继续
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sam_introduction
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    TextComponent text_20
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
      text = SAM 量表解释 (SAM Explanation)
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    TextComponent text_21
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        实验中使用 SAM 量表（卡通小人）来评估您的感受
        请使用键盘数字键 1-9 进行选择
    TextComponent text_22
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.16)
      startVal [time (s)] = 0.0
      text = 第一维度：愉悦度 (Valence)
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    TextComponent text_23
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
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      text:
        1分 = 非常不开心 / 负面 / 痛苦
        5分 = 中性 / 无感
        9分 = 非常开心 / 正面 / 愉悦
    TextComponent text_24
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = 第二维度：唤醒度 (Arousal)
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    TextComponent text_25
      letterHeight = 0.05
      pos = (0, -0.22)
      startVal [time (s)] = 0.0
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      text:
        1分 = 非常平静 / 困倦 / 放松
        5分 = 正常状态
        9分 = 非常兴奋 / 激动 / 警觉
    TextComponent text_26
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = 如果没有疑问，请按 [空格键] 开始正式实验
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      End Routine:
        #datastamp=int(datetime.now().timestamp()*1000)-timebegin
        #server_socket.send((str(startTask)  + '\n').encode('utf-8'))

        marker = f"MARKER {startTask}"
        timestamp = local_clock()
        outlet.push_sample([marker], timestamp)
  Routine task
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    ImageComponent image_3
      image [set every repeat] = $image_path
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        #datastamp=int(datetime.now().timestamp()*1000)-timebegin
        #server_socket.send((str(oneTaskStart)  + '\n').encode('utf-8'))

        marker = f"MARKER {oneTaskStart}"
        timestamp = local_clock()
        outlet.push_sample([marker], timestamp)
      End Routine:
        #datastamp=int(datetime.now().timestamp()*1000)-timebegin
        #server_socket.send((str(oneTaskEnd)  + '\n').encode('utf-8'))

        marker = f"MARKER {oneTaskEnd}"
        timestamp = local_clock()
        outlet.push_sample([marker], timestamp)
  Routine block_init
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # 1. 从外层 Excel 读取索引范围
        # Excel 读取进来的数字可能是浮点数 (如 0.0)，必须强制转为整数 int()
        s = int(start_idx)
        e = int(end_idx)

        # 2. 生成列表
        # range(0, 10) 会生成 [0, 1, ..., 9]
        # range(10, 20) 会生成 [10, 11, ..., 19]
        use_rows = list(range(s, e))

        # 3. (可选) 打印到控制台，方便调试
        # 运行实验时打开 Runner 窗口可以看到这些字，确认没有跑错图
        print(f"Current Block: Reading rows {use_rows} from file {cond_file}")
  Routine sam1
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    ImageComponent image_4
      image = images/SAM.png
      pos = (0, 0.2)
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_27
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        愉悦度:看到图片觉得愉快或不愉快。
        愉快程度越高,评分越接近 9，越不愉快,评分越接近 1
        愉悦包括开心、高兴和感兴趣, 不愉悦包括不开心、害怕和生气
    TextComponent text_30
      color = 0.1922, 0.9686, 0.1922
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        愉悦度（厌恶 - 愉悦）
        请输入分数（数字键1-9）
    KeyboardComponent key_rating1
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        # 1. 检查是否有按键输入
        if key_rating1.keys:
            # key_rating.keys 是一个列表，如 ['5']
            # 我们取最后一个值（也是唯一一个值）
            pressed_key_str = key_rating1.keys[-1]

            # 2. 处理按键值 (防止NumPad和小键盘的区别)
            # 如果您允许 'num_1' 这种小键盘输入，需要额外处理
            # 这里假设只用了主键盘数字 '1'-'9'
            try:
                # 将字符串 '5' 转换为整数 5
                score = int(pressed_key_str)

                # 3. 定义打标规则 (关键步骤)
                # 为了区分“图片类别1”和“评分1分”，建议给评分加一个基数
                # 例如：定义 200 为评分起始段
                # 1分 -> 发送 201
                # 5分 -> 发送 205
                # 9分 -> 发送 209
                marker_to_send = 200 + score

                # 4. 调用您之前定义的函数发送
        #        datastamp=int(datetime.now().timestamp()*1000)-timebegin
        #        server_socket.send((str(marker_to_send)  + '\n').encode('utf-8'))
        #
                marker = f"MARKER {marker_to_send}"
                timestamp = local_clock()
                outlet.push_sample([marker], timestamp)

                # (可选) 打印到控制台确认
                print(f"Rating captured: {score}, Marker sent: {marker_to_send}")

            except ValueError:
                print(f"Error: Key '{pressed_key_str}' is not a number.")
        else:
            print("No key pressed!")
  Routine sam2
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    ImageComponent image_5
      image = images/SAM.png
      pos = (0, 0.2)
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_28
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        愉悦度:看到图片觉得愉快或不愉快。
        愉快程度越高,评分越接近 9，越不愉快,评分越接近 1
        愉悦包括开心、高兴和感兴趣, 不愉悦包括不开心、害怕和生气
    TextComponent text_29
      color = -1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        唤醒度（平静 - 兴奋）
        请输入分数（数字键1-9）
    KeyboardComponent key_rating2
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      End Routine:
        # 1. 检查是否有按键输入
        if key_rating2.keys:
            # key_rating.keys 是一个列表，如 ['5']
            # 我们取最后一个值（也是唯一一个值）
            pressed_key_str = key_rating2.keys[-1]

            # 2. 处理按键值 (防止NumPad和小键盘的区别)
            # 如果您允许 'num_1' 这种小键盘输入，需要额外处理
            # 这里假设只用了主键盘数字 '1'-'9'
            try:
                # 将字符串 '5' 转换为整数 5
                score = int(pressed_key_str)

                # 3. 定义打标规则 (关键步骤)
                # 为了区分“图片类别1”和“评分1分”，建议给评分加一个基数
                # 例如：定义 200 为评分起始段
                # 1分 -> 发送 201
                # 5分 -> 发送 205
                # 9分 -> 发送 209
                marker_to_send = 300 + score

                # 4. 调用您之前定义的函数发送
        #        datastamp=int(datetime.now().timestamp()*1000)-timebegin
        #        server_socket.send((str(marker_to_send)  + '\n').encode('utf-8'))

                marker = f"MARKER {marker_to_send}"
                timestamp = local_clock()
                outlet.push_sample([marker], timestamp)

                # (可选) 打印到控制台确认
                print(f"Rating captured: {score}, Marker sent: {marker_to_send}")

            except ValueError:
                print(f"Error: Key '{pressed_key_str}' is not a number.")
        else:
            print("No key pressed!")
  Routine end
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    TextComponent text_31
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 感谢您的参与
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        #datastamp=int(datetime.now().timestamp()*1000)-timebegin
        #server_socket.send((str(endTask)  + '\n').encode('utf-8'))

        marker = f"MARKER {endTask}"
        timestamp = local_clock()
        outlet.push_sample([marker], timestamp)
      End Routine:
        #datastamp=int(datetime.now().timestamp()*1000)-timebegin
        #server_socket.send((str(endOfTheParadigm) + '\n').encode('utf-8'))

        marker = f"MARKER {endOfTheParadigm}"
        timestamp = local_clock()
        outlet.push_sample([marker], timestamp)
  Routine fixation
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        import random
        jitter_duration = random.uniform(0.5, 1.2)
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = jitter_duration
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  Routine blank
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        #datastamp=int(datetime.now().timestamp()*1000)-timebegin
        #server_socket.send((str(oneBlankStart)  + '\n').encode('utf-8'))

        marker = f"MARKER {oneBlankStart}"
        timestamp = local_clock()
        outlet.push_sample([marker], timestamp)
      End Routine:
        #datastamp=int(datetime.now().timestamp()*1000)-timebegin
        #server_socket.send((str(oneBlankEnd)  + '\n').encode('utf-8'))

        marker = f"MARKER {oneBlankEnd}"
        timestamp = local_clock()
        outlet.push_sample([marker], timestamp)
    TextComponent text_35
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine rest
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    TextComponent text_32
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        请放松眼睛，自然眨眼

        (休息 5 秒)
  Routine LSLInint
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import (
            resolve_streams,
            StreamInfo,
            StreamOutlet,
            local_clock
        )
        from psychopy import core

        DEBUG_LSL = True
        has_consumer = False

        # -----------------------------
        # 创建 StreamInfo
        # -----------------------------
        info = StreamInfo(
             name="eprime",   # 建议和 E-Prime 一致
             type="Markers",
             channel_count=1,
             nominal_srate=0,             # irregular
             channel_format="string",
             source_id="test_marker_stream"
         )

        # -----------------------------
        # 创建 Outlet
        # -----------------------------
        outlet = StreamOutlet(info)
  Routine waitforconsumers
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        # 初始化文本内容
        text_33.text = "Waiting for LSL consumer..."
      End Routine:
        has_consumer = outlet.have_consumers()
    TextComponent text_33
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine waitforconsumers2
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    TextComponent text_34
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        if has_consumer:
            text_34.text = "have consumer connected...\nPlease start EEG recording."
            text_34.color = "green"
            print("has consumer")

            marker = f"MARKER test"
            timestamp = local_clock()
            outlet.push_sample([marker], timestamp)

        else:
            text_34.txt = "no consumer..."
            text_34.color = "red"
            print("no consumer")
      End Routine:
        if has_consumer:
            pass
        else:
            core.quit()
Flow
  Routine welcome
  Routine LSLInint
  Routine waitforconsumers
  Routine waitforconsumers2
  Routine introduction
  Routine jingxitai
  Routine jingxitai2
  Routine zhengyanjingxitai
  Routine zhengyanjingxitai2
  Routine task_introduction
  Routine sam_introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = loop_controller.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'cond_file': 'conditions\n02233338.xlsx', 'start_idx': 0, 'end_idx': 10, 'block_type': 'A_Repeat'},
      {'cond_file': 'conditions\n02782093.xlsx', 'start_idx': 10, 'end_idx': 20, 'block_type': 'B_First'},
      {'cond_file': 'conditions\n01728572.xlsx', 'start_idx': 10, 'end_idx': 20, 'block_type': 'B_First'},
      {'cond_file': 'conditions\n02782093.xlsx', 'start_idx': 10, 'end_idx': 20, 'block_type': 'B_Repeat'},
      {'cond_file': 'conditions\n02747177.xlsx', 'start_idx': 0, 'end_idx': 10, 'block_type': 'A_Repeat'},
      {'cond_file': 'conditions\n02099601.xlsx', 'start_idx': 0, 'end_idx': 10, 'block_type': 'A_Repeat'},
      {'cond_file': 'conditions\n02099601.xlsx', 'start_idx': 10, 'end_idx': 20, 'block_type': 'B_First'},
      {'cond_file': 'conditions\n11939491.xlsx', 'start_idx': 10, 'end_idx': 20, 'block_type': 'B_First'},
      {'cond_file': 'conditions\n03376595.xlsx', 'start_idx': 0, 'end_idx': 10, 'block_type': 'A_Repeat'},
      {'cond_file': 'conditions\n02099601.xlsx', 'start_idx': 0, 'end_idx': 10, 'block_type': 'A_First'},
      {'cond_file': 'conditions\n02233338.xlsx', 'start_idx': 0, 'end_idx': 10, 'block_type': 'A_First'},
      {'cond_file': 'conditions\n02747177.xlsx', 'start_idx': 0, 'end_idx': 10, 'block_type': 'A_First'},
      {'cond_file': 'conditions\n01728572.xlsx', 'start_idx': 0, 'end_idx': 10, 'block_type': 'A_Repeat'},
      {'cond_file': 'conditions\n02782093.xlsx', 'start_idx': 0, 'end_idx': 10, 'block_type': 'A_Repeat'},
      {'cond_file': 'conditions\n11939491.xlsx', 'start_idx': 0, 'end_idx': 10, 'block_type': 'A_Repeat'}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
    Routine block_init
    LoopInitiator trials_loop loopType="TrialHandler"
      Selected rows = $use_rows
      conditionsFile = $cond_file
      loopType = random
      nReps = 1
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      Routine fixation
      Routine task
      Routine blank
    LoopTerminator trials_loop
    Routine sam1
    Routine sam2
    Routine rest
  LoopTerminator trials
  Routine end
